PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'P', 'age (years)': '', 'sex': '', 'gender': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3008, 1692]
  expName = intelligibility_test
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment.

        You will be presented with audio clips of sentences in background noise. When you see a "+" on the screen, press the space bar to listen to the sentence. After listening, type out what you heard. Please do your best to use correct spelling.

        If you are not able to understand all of the worse, just type as much as you can. It is OK to guess on any words you are not sure of.

        Press "Return" to go through practice rounds!
    KeyboardComponent intro_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_start
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
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    SoundComponent practice_sentence
      sound [set every repeat] = $audio
      speakerIndex = 4.0
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = practice_sentence.getDuration()
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = practice_sentence.getDuration()
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = practice_sentence.getDuration()
      text = Press 'Return' when done typing.
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  Routine practice_intro
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    TextComponent prac_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_intro_text
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine move_to_trial
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great job! We will now move onto the actual experiment.

        From this point on, please do not adjust the volume.

        Press 'Return' to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_start
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    TextComponent trial_start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent trial_start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    SoundComponent sentence
      sound [set every repeat] = $audio0
      speakerIndex = 4.0
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = sentence.getDuration()
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    KeyboardComponent trial_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = sentence.getDuration()
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trialCount += 1
      End Routine:
        if trialCount % blockSize == 0 and trialCount != 0:
            trials.finished = True

        #if trialCount == 60:
         #   trials_3.finished = True
  Routine end
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating in our experiment!
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  Routine rest
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    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 40
      text = You're doing great! Let's take a short break before continuing.
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if len(allRows) == 0:
            trials_3.finished = True
            continueRoutine = False
  Routine row_setup_code
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        trialCount = 0
        import random

        allRows = list(range(60))
        random.shuffle(allRows)
        rowsToUse = []
      Begin Routine:
        blockSize = 20;
        if len(allRows) >= blockSize:
            rowsToUse = allRows[:blockSize]  # take the first 20 rows
            allRows = allRows[blockSize:]  # remove those rows from the pool
        else:
            rowsToUse = allRows  # take the remaining rows (for the last block)
            allRows = []  # clear the pool
Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = practice_sentences.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practice_intro_text': "We will first practice listening to a sentence without noise. Press 'Return' to continue.", 'audio': 'soundfiles/NU1109_1107_talker01.wav'},
      {'practice_intro_text': "Great! Now we will practice listening to sentences with noise. This may be more challenging, so just try your best! Press 'Return' to continue.", 'audio': 'soundfiles/NU1109_1082_talker01_SNR5.wav'},
      {'practice_intro_text': 'If you are not sure of what you hear, just do your best. Please guess if possible. Feel free to adjust your volume.', 'audio': 'soundfiles/NU1109_0792_talker01_SNR-5.wav'},
      {'practice_intro_text': 'If you are not sure of what you hear, just do your best. Please guess if possible. Feel free to adjust your volume.', 'audio': 'soundfiles/NU1109_0825_talker01_SNR-5.wav'}]
    Routine practice_intro
    Routine practice_start
    Routine practice
  LoopTerminator trials_2
  Routine move_to_trial
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = 60sentences.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'audio5_pos': 'soundfiles/NU1109_0021_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0021_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0021_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0040_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0040_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0040_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0049_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0049_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0049_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0059_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0059_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0059_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0087_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0087_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0087_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0097_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0097_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0097_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0101_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0101_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0101_talker01_SNR0.wav'},
      {'audio5_pos': 'soundfiles/NU1109_0108_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0108_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0108_talker01_SNR0.wav'}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
    Routine row_setup_code
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $rowsToUse
      conditionsFile = 60sentences.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'audio5_pos': 'soundfiles/NU1109_0021_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0021_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0021_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0040_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0040_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0040_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0049_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0049_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0049_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0059_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0059_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0059_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0087_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0087_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0087_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0097_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0097_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0097_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0101_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0101_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0101_talker01_SNR0.wav'},
        {'audio5_pos': 'soundfiles/NU1109_0108_talker01_SNR5.wav', 'audio5_neg': 'soundfiles/NU1109_0108_talker01_SNR-5.wav', 'audio0': 'soundfiles/NU1109_0108_talker01_SNR0.wav'}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
      Routine trial_start
      Routine trial
    LoopTerminator trials
    Routine rest
  LoopTerminator trials_3
  Routine end
